(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingImageDimension 3)
(UseDirectionCosines "true")
(ErodeMask "true")

// ******************* Main Components ************************

(Registration "MultiMetricMultiResolutionRegistration")
(Interpolator "BSplineInterpolator" "BSplineInterpolator" "BSplineInterpolator")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")

(FixedImagePyramid "FixedRecursiveImagePyramid")
(MovingImagePyramid "MovingRecursiveImagePyramid")

(Optimizer "AdaptiveStochasticGradientDescent")
(Transform "BSplineTransform")
(Metric "AdvancedMattesMutualInformation" "TransformBendingEnergyPenalty" "TransformRigidityPenalty")
(Metric0Weight 1 1 1)
(Metric1Weight 10 10 10)
(Metric2Weight 0.5 0.5 0.5)

// ******************* Transformation **************************

(GridSpacingSchedule 4 2 1)
(FinalGridSpacingInPhysicalUnits 10)
(HowToCombineTransforms "Compose")

// ******************* Similarity measure *********************

(NumberOfHistogramBins 100)

// ******************** Multiresolution **********************

(NumberOfResolutions 3)
(ImagePyramidSchedule 4 4 4  2 2 2  1 1 1)

// ******************* Optimizer ****************************

(MaximumNumberOfIterations 500 200 100)

// **************** Image sampling **********************
(Sampler "RandomSampler")
(NumberOfSpatialSamples 4096)
(NewSamplesEveryIteration "true")
(ImageSampler "Grid" "Grid" "Grid")
(SampleGridSpacing 4 2 2)
(SampleRegionSize 100) 
(UseRandomSampleRegion "true")
(MaximumNumberOfSamplingAttempts 5)
(RequiredRatioOfValidSamples 0.05)

// ************* Interpolation and Resampling ****************

(BSplineInterpolationOrder 3)
(FinalBSplineInterpolationOrder 3)

(ShowExactMetricValue "false") 
(WriteTransformParametersEachResolution "true")
//(WriteResultImageAfterEachResolution "true")
//(WritePyramidImagesAfterEachResolution "true")

(DefaultPixelValue -1000)
(WriteResultImage "false")
(ResultImagePixelType "short")
(ResultImageFormat "nii.gz")